PsychoPy2experiment version="1.81.03"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = source_monitoring
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    TextComponent text
      wrapWidth = 2
      stopVal [duration (s)] = 2
      text = get ready to say the word that appears on the screen...
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_2
      Begin Experiment:
        from pyo import *
        serv = Server().boot()


        # define function to slow audio data
        def slow(playback_speed):
            dur = 1

            #playback_speed = .925
            i = Input()

            def start():
                print "start!"
                rec.play()
                a.play().out()
                tf.stop()

            def stop():
                print "stop!"
                a.stop()
                a.reset()
                tf.play()

            tab = NewTable(dur)
            transpo_to_normal = (-24.0 * playback_speed) + 24
            j = Harmonizer(i, transpo=transpo_to_normal).mix(2)
            k = Gate(j, thresh=-70, falltime=0.02, lookahead=20.0)
            rec = TableRec(k, tab)
            a = TableRead(table=tab, freq=playback_speed/dur).stop()

            env = Follower(i)
            th = Thresh(env, .2)
            tf = TrigFunc(th, start)

            tr = TrigFunc(rec['trig'], stop)
      End Routine:
        serv.start()
  Routine slowed
    TextComponent text_3
      stopVal [duration (s)] = 10
      text = should be good to go
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine ok
    CodeComponent code
      Each Frame:
        if d.get() > talkThresh:
                talkStarted = True

        if talkStarted and not stoppedTalking:
            if d.get() < talkThresh:
                stoppedTalking = True
                stopTime = globalClock.getTime() + 1

        if stoppedTalking and globalClock.getTime() >= stopTime:
                for thisComponent in trialComponents:
                    if hasattr(thisComponent, "status"):
                        thisComponent.status = FINISHED
                continueRoutine = False
      Begin Routine:
        mic = Input(chnl=0)

        ## This uses harmonizer
        b = Harmonizer(mic, transpo=harmPitch)
        c = Gate(b, thresh=-90, falltime=0.02, lookahead=20.0).mix(2).out()
        d = Follower2(b)

        talkThresh = .08
        talkStarted = False
        stoppedTalking = False
        stopTime = 100


        ## This uses phase vocoder
        #pva = PVAnal(mic, size=1024, overlaps=4, wintype=2)
        #pvs = PVAddSynth(pva, pitch=pvPitch, num=100, first=0, inc=2).mix(2).out()
      End Routine:
        serv.stop()
    TextComponent text_2
      stopVal [duration (s)] = 10
      text [set every repeat] = $word
      startVal [time (s)] = 1
      letterHeight = 0.1
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Flow
  Routine slowed
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = wordlist.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'word': u'cat', 'pitch': 0.85},
      {'word': u'dog', 'pitch': 0.9},
      {'word': u'truck', 'pitch': 1.1},
      {'word': u'car', 'pitch': 1.15},
      {'word': u'elephant', 'pitch': 1.2}]
    Routine trial
    Routine ok
  LoopTerminator trials
